/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "28084",                        
            "base-frame": {
            "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "30811"
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "64307",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTML",
            "psm": "PSM2" 
       }
    ]
//    ,
//    "ecm-teleop":
//    {
//        "mtm-left": "MTML",
//        "ecm": "ECM"
//    }
}
