/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    }
    ,
    "arms":
    [
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "28084"
                        ,"base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "30142"
                        ,"base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "30811"
        }
        ,
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30593",
                        "base-frame": {
            "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "64307",
                        "base-frame": {
            "reference-frame": "ECM",
                "transform": [[  1.0,  0.0,          0.0,         -0.20],
                              [  0.0, -0.866025404,  0.5,          0.0 ],
                              [  0.0, -0.5,         -0.866025404,  0.0 ],
                              [  0.0,  0.0,          0.0,          1.0 ]]
            }
        }
    ]
    ,
    "psm-teleops":
    [
        {
            "mtm": "MTMR",
            "psm": "PSM1"
        }
        ,
        {
            "mtm": "MTML",
            "psm": "PSM2" 
       }
//       ,
//        {
//            "mtm": "MTMR",
//            "psm": "PSM2"
//        }
//        ,
//        {
//            "mtm": "MTML",
//            "psm": "PSM1"
//        }
    ]
   ,
   "ecm-teleop":
   {
       "mtm-left": "MTML",
       "mtm-right": "MTMR",
       "ecm": "ECM"
   }
}
