/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml",
        "port": "udpfw"
    },
    "operator-present": {
        "io": "io/sawRobotIO1394-MTML-dv-head-sensor.xml"
    },
    "arms": [
        {
            "name": "SUJ",
            "type": "SUJ_Fixed",
            "kinematic": "arm/suj-fixed.json"
        },
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "30142",
            "arm": "arm/PSM1-30142.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        },
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "30811",
            "arm": "arm/ECM-30811.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        },
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "64307",
            "arm": "arm/MTML-64307.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,          0.0,          0.180],
                              [  0.0,  0.866025404,  0.5,          0.400],
                              [  0.0,  0.5,         -0.866025404,  0.475],
                              [  0.0,  0.0,          0.0,          1.0]]
            }
        }
    ]
    ,
    "psm-teleops": [
        {
            "mtm": "MTML",
            "psm": "PSM1"
        }
    ]
}