/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    "io": {
        "footpedals": "io/sawRobotIO1394-MTML-foot-pedals.xml"
    },
    "arms": [
        {
            "name": "SUJ",
            "type": "SUJ_Fixed",
            "kinematic": "arm/suj-fixed.json"
        },
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "30142",
            "arm": "arm/PSM1-30142.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        },
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "30811",
            "arm": "arm/ECM-30811.json",
            "base-frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        },
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "30593",
            "arm": "arm/MTMR-30593.json",
            "base-frame": {
                "reference-frame": "HRSV",
                "transform": [[ -1.0,  0.0,  0.0,  0.0],
                              [  0.0,  1.0,  0.0,  0.0],
                              [  0.0,  0.0, -1.0,  0.0],
                              [  0.0,  0.0,  0.0,  1.0]]
            }
        }
    ]
}