{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs":
    [
        {
            "name": "IO1",
            "port": "udpfw", // fw, udpfw or udp
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "39494",
            "arm_file": "../arm/MTML-39494.json",
            "IO_file": "../io/sawRobotIO1394-MTML-39494.json",
            "IO_gripper_file": "../io/sawRobotIO1394-MTML-gripper-39494.json",
            "IO": "IO1" // defined in IOs
        }
    ]
}
