/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "settings": {
        "path": ["io"]
    },
    "IOs": [
        {
            "name": "IO1",
            "port": "udpfw", // fw, udpfw or udp
            "protocol": "broadcast-query-read-write"
        }
    ],
    "arms": [
        {
            "name": "SUJ",
            "type": "SUJ_Si",
            "arm_file": "kinematic/suj-si.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "344539",
            "arm_file": "../arm/ECM-344539.json",
            "IO_file": "../io/sawRobotIO1394-ECM-344539.json",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "276682",
            "arm_file": "../arm/PSM1-276682.json",
            "IO_file": "../io/sawRobotIO1394-PSM1-276682.json",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "360087",
            "arm_file": "../arm/PSM2-360087.json",
            "IO_file": "../io/sawRobotIO1394-PSM2-360087.json",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
        ,
        {
            "name": "MTML",
            "type": "MTM",
            "serial": "39494",
            "arm_file": "../arm/MTML-39494.json",
            "IO_file": "../io/sawRobotIO1394-MTML-39494.json",
            "IO_gripper_file": "../io/sawRobotIO1394-MTML-gripper-39494.json",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [
                    [
                        -1.0,
                        0.0,
                        0.0,
                        0.180
                    ],
                    [
                        0.0,
                        0.866025404,
                        0.5,
                        0.400
                    ],
                    [
                        0.0,
                        0.5,
                        -0.866025404,
                        0.475
                    ],
                    [
                        0.0,
                        0.0,
                        0.0,
                        1.0
                    ]
                ]
            }
        },
        {
            "name": "MTMR",
            "type": "MTM",
            "serial": "56216",
            "arm_file": "../arm/MTMR-56216.json",
            "IO_file": "../io/sawRobotIO1394-MTMR-56216.json",
            "IO_gripper_file": "../io/sawRobotIO1394-MTMR-gripper-56216.json",
            "IO": "IO1",
            "base_frame": {
                "reference_frame": "HRSV",
                "transform": [
                    [
                        -1.0,
                        0.0,
                        0.0,
                        -0.180
                    ],
                    [
                        0.0,
                        0.866025404,
                        0.5,
                        0.400
                    ],
                    [
                        0.0,
                        0.5,
                        -0.866025404,
                        0.475
                    ],
                    [
                        0.0,
                        0.0,
                        0.0,
                        1.0
                    ]
                ]
            }
        }
    ]
    ,
    "consoles": [
        {
            "IO_head_sensor": {
                "IO": "IO1",
                "IO_file": "io/sawRobotIO1394-MTMR-dv-head-sensor.json"
            },
            "IO_pedals": {
                "IO": "IO1",
                "IO_file": "io/sawRobotIO1394-MTMR-foot-pedals-DQLA.json"
            },
            "input_type": "PEDALS_ISI_HEAD_SENSOR",
            "name": "Console",
            "teleop_PSMs": [
                {
                    "MTM": "MTMR",
                    "PSM": "PSM1"
                },
                {
                    "MTM": "MTML",
                    "PSM": "PSM2"
                }
            ],
            "teleop_ECMs": [
                {
                    "MTML": "MTML",
                    "MTMR": "MTMR",
                    "ECM": "ECM"
                }
            ]
        }
    ]
}