/* -*- Mode: Javascript; tab-width: 4; indent-tabs-mode: nil; c-basic-offset: 4 -*- */
{
    // see https://dvrk.readthedocs.io
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "settings": {
        "path": ["io"]
    },
    "IOs":
    [
        {
            "name": "IO1",
            "port": "udpfw", // fw, udpfw or udp
            "protocol": "broadcast-query-read-write"
        }
    ]
    ,
    "arms":
    [
        {
            "name": "SUJ",
            "type": "SUJ_Si",
            "arm_file": "kinematic/suj-si.json"
        }
        ,
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "344539",
            "arm_file": "../arm/ECM-344539.json",
            "IO_file": "../io/sawRobotIO1394-ECM-344539.json",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            }
        }
        ,
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "276682",
            "arm_file": "../arm/PSM1-276682.json",
            "IO_file": "../io/sawRobotIO1394-PSM1-276682.json",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            }
        }
        ,
        {
            "name": "PSM2",
            "type": "PSM",
            "serial": "360087",
            "arm_file": "../arm/PSM2-360087.json",
            "IO_file": "../io/sawRobotIO1394-PSM2-360087.json",
            "IO": "IO1",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM2"
            }
        }
    ]
}
