{
    "$id": "dvrk-system.schema.json",
    "$version": "1",
    "IOs": [
        {
            "name": "IO1",
            "port": "udpfw",
            "protocol": "sequential-read-broadcast-write"
        }
    ],
    "arms": [
        {
            "name": "SUJ",
            "type": "SUJ_Fixed",
            "arm_file": "../arm/suj-fixed.json"
        },
        {
            "name": "PSM1",
            "type": "PSM",
            "serial": "30142",
            "base_frame": {
                "component": "SUJ",
                "interface": "PSM1"
            },
            "IO": "IO1",
            "arm_file": "../arm/PSM1-30142.json",
            "IO_file": "../io/sawRobotIO1394-PSM1-30142.json"
        },
        {
            "name": "ECM",
            "type": "ECM",
            "serial": "30811",
            "base_frame": {
                "component": "SUJ",
                "interface": "ECM"
            },
            "IO": "IO1",
            "arm_file": "../arm/ECM-30811.json",
            "IO_file": "../io/sawRobotIO1394-ECM-30811.json"
        }
    ]
}
