{
    "DH": {
        "convention": "modified",
        "joints": [
            {
                "name": "roll",
                "alpha": 0.0,
                "A": 0.0,
                "theta": 0.0,
                "D": 0.4162,
                "type": "revolute",
                "mode": "active",
                "offset": 0.0,
                "qmin": -4.53786,
                "qmax": 4.53786,
                "ftmax": 0.33
            },
            {
                "name": "wrist_pitch",
                "alpha": -1.5708,
                "A": 0.0,
                "theta": 0.0,
                "D": 0.0,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -1.39626,
                "qmax": 1.39626,
                "ftmax": 0.25
            },
            {
                "name": "wrist_yaw",
                "alpha": -1.5708,
                "A": 0.0091,
                "theta": 0.0,
                "D": 0.0,
                "type": "revolute",
                "mode": "active",
                "offset": -1.5708,
                "qmin": -1.39626,
                "qmax": 1.39626,
                "ftmax": 0.2
            }
        ]
    },
    "jaw": {
        "qmin": -0.698132,
        "qmax": 1.39626,
        "ftmax": 0.16
    },
    "tooltip_offset": [
        [
            0.0,
            -1.0,
            0.0,
            0.0
        ],
        [
            0.0,
            0.0,
            1.0,
            0.0
        ],
        [
            -1.0,
            0.0,
            0.0,
            0.0
        ],
        [
            0.0,
            0.0,
            0.0,
            1.0
        ]
    ],
    "coupling": {
        "ActuatorToJointPosition": [
            [
                -1.5632,
                0.0,
                0.0,
                0.0
            ],
            [
                0.0,
                1.0186,
                0.0,
                0.0
            ],
            [
                0.0,
                -0.8306,
                0.6089,
                0.6089
            ],
            [
                0.0,
                0.0,
                -1.2177,
                1.2177
            ]
        ]
    },
    "tool_engage_position": {
        "lower": [
            -4.5378,
            -0.261799,
            -0.261799,
            0.0
        ],
        "upper": [
            4.5378,
            0.261799,
            0.261799,
            0.0
        ]
    }
}
